PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'age': '', 'gender': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = attention
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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  Routine divided
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    TextComponent number_display_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Digit_Stim
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    SoundComponent standard_2
      sound [set every repeat] = /Users/haripriya/Downloads/800hz.mp3
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    SoundComponent deviant_2
      sound [set every repeat] = /Users/haripriya/Downloads/1200hz.mp3
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 4.0
      text = What four-digit number did you see?
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    TextboxComponent recall_response_2
      anchor = bottom-center
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 4.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 4.0
      text = Click here to submit 
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    MouseComponent mouse_2
      clickable = text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 4.0
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  Routine focused
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    TextComponent number_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $DigitStim
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.5
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      text = What four-digit number did you see?
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    TextboxComponent recall_response
      anchor = bottom-center
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 3.0
      text = Click here to submit 
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    MouseComponent mouse
      clickable = text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 3.0
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  Routine break_2
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    ImageComponent image
      image = /Users/haripriya/Downloads/ .jpg
      size = (1, 1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 60.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Condition': 'Focused', 'DigitStim': 9813, 'ToneType': None, 'ToneProb': None, 'CorrectResponse': 9813, 'Condition_type': 'Divided', 'Digit_Stim': 2759, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 2759},
      {'Condition': 'Focused', 'DigitStim': 3637, 'ToneType': None, 'ToneProb': None, 'CorrectResponse': 3637, 'Condition_type': 'Divided', 'Digit_Stim': 2860, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 2860},
      {'Condition': 'Focused', 'DigitStim': 9138, 'ToneType': None, 'ToneProb': None, 'CorrectResponse': 9138, 'Condition_type': 'Divided', 'Digit_Stim': 9901, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 9901},
      {'Condition': 'Focused', 'DigitStim': 6764, 'ToneType': None, 'ToneProb': None, 'CorrectResponse': 6764, 'Condition_type': 'Divided', 'Digit_Stim': 4258, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 4258},
      {'Condition': 'Focused', 'DigitStim': 1269, 'ToneType': None, 'ToneProb': None, 'CorrectResponse': 1269, 'Condition_type': 'Divided', 'Digit_Stim': 2152, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 2152},
      {'Condition': 'Focused', 'DigitStim': 5572, 'ToneType': None, 'ToneProb': None, 'CorrectResponse': 5572, 'Condition_type': 'Divided', 'Digit_Stim': 8028, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 8028}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
    Routine focused
  LoopTerminator trials
  Routine break_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Condition_type': 'Divided', 'Digit_Stim': 2759, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 2759},
      {'Condition_type': 'Divided', 'Digit_Stim': 2860, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 2860},
      {'Condition_type': 'Divided', 'Digit_Stim': 9901, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 9901},
      {'Condition_type': 'Divided', 'Digit_Stim': 4258, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 4258},
      {'Condition_type': 'Divided', 'Digit_Stim': 2152, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 2152},
      {'Condition_type': 'Divided', 'Digit_Stim': 8028, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 8028},
      {'Condition_type': 'Divided', 'Digit_Stim': 6466, 'Tone_Type': 'deviant', 'Tone_Prob': 0.1, 'Freq': 1200, 'Correct_Response': 6466},
      {'Condition_type': 'Divided', 'Digit_Stim': 8641, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 8641},
      {'Condition_type': 'Divided', 'Digit_Stim': 4065, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 4065},
      {'Condition_type': 'Divided', 'Digit_Stim': 6882, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 6882},
      {'Condition_type': 'Divided', 'Digit_Stim': 1426, 'Tone_Type': 'standard', 'Tone_Prob': 0.9, 'Freq': 800, 'Correct_Response': 1426}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
    Routine divided
  LoopTerminator trials_2
