PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = word priming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $test_word
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'bottle'},
      {'study_word': 'laptop'},
      {'study_word': 'pen'},
      {'study_word': 'college'},
      {'study_word': 'cook'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'v_s_', 'reference': 'vase', 'cond': 'prime'},
      {'test_word': 't_g_r', 'reference': 'tiger', 'cond': 'prime'},
      {'test_word': 'b_ _k', 'reference': 'book', 'cond': 'prime'},
      {'test_word': 'c_s_i_n', 'reference': 'cushion', 'cond': 'prime'},
      {'test_word': '_ia_o', 'reference': 'piano', 'cond': 'prime'},
      {'test_word': 'b_o_tl_', 'reference': 'bottle', 'cond': 'prime'},
      {'test_word': 'l_p_o_', 'reference': 'laptop', 'cond': 'prime'},
      {'test_word': '_en', 'reference': 'pen', 'cond': 'prime'},
      {'test_word': 'c_ll_g_', 'reference': 'college', 'cond': 'prime'},
      {'test_word': '_o_k', 'reference': 'cook', 'cond': 'prime'},
      {'test_word': 'p_o_e', 'reference': 'phone', 'cond': 'non-prime'},
      {'test_word': 't_le_or_', 'reference': 'teleport', 'cond': 'non-prime'},
      {'test_word': '_oa_d', 'reference': 'board', 'cond': 'non-prime'},
      {'test_word': 'n_il_', 'reference': 'nails', 'cond': 'non-prime'},
      {'test_word': 'cl_c_', 'reference': 'clock', 'cond': 'non-prime'},
      {'test_word': 's_o_', 'reference': 'shoe', 'cond': 'non-prime'},
      {'test_word': 'c_m_r_', 'reference': 'camera', 'cond': 'non-prime'},
      {'test_word': '_en_uin', 'reference': 'penguin', 'cond': 'non-prime'},
      {'test_word': 'sc_o_l', 'reference': 'school', 'cond': 'non-prime'},
      {'test_word': '_p_on', 'reference': 'spoon', 'cond': 'non-prime'}]
    Routine test
  LoopTerminator trials_2
